CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<WellRow>[A-H])(?P<WellColumn>[0-9]{1,2})_.*_Stitched\[Read 1_(?P<ChannelOut>[^0-9]+) .*\]_001.tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*(?P<Plate>Plate_[0-9]{1,2})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelOut "DAPI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelOut "GFP")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelOut "Texas Red")
    Name to assign these images:TexasRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Plate
    Metadata category:WellColumn

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.05,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Median absolute deviation
    # of deviations:0
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
MeasureImageIntensity:[module_num:7|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
    Select images to measure:TexasRed
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:8|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
    Select images to measure:TexasRed
    Select objects to measure:Cells

GrayToColor:[module_num:9|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
    Select a color scheme:RGB
    Rescale intensity:No
    Select the image to be colored red:TexasRed
    Select the image to be colored green:GFP
    Select the image to be colored blue:DAPI
    Name the output image:PeriColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PeriColorImage
    Name the output image:PeriOutlineImage
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:yellow
    Select objects to display:FilteredNuclei
    Select outline color:red
    Select objects to display:Cells

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:Cells, FilteredNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|OneDrive\\Documents\\School\\2020 Fall\\Other\\RAMLAB\\Projects\\MSC-Pericyte Interaction
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ImageSet6_8-26-2021-GFP_
    Overwrite existing files without warning?:No
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
DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:FilteredNuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:PeriOutlineImage
    Text color:white
    Name the output image that has the measurements displayed:PeriDisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:PeriDisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|C:\\Users\\Andre\\OneDrive\\Documents\\School\\2020 Fall\\Other\\RAMLAB\\Projects\\MSC-Pericyte Interaction
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveCroppedObjects:[module_num:15|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enabled:False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
    Objects:Cells
    Directory:Default Input Folder sub-folder|Desktop\\January 20\\Objects
    Saved file format:8-bit tiff
    Do you want to save cropped images or object masks?:Images
    Image:PeriOutlineImage
